// ********* Image *********

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")
(FixedImageDimension 3)
(MovingImageDimension 3)

// ********* Main Components *********

(Registration "MultiResolutionRegistration")
(Interpolator "LinearInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "AffineTransform")
(Metric "AdvancedMattesMutualInformation")

// ********* Transformation *********

(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")

// ********* Similarity Measure *********

(NumberOfHistogramBins 32)
(ErodeMask "false")

// ********** Multiresolution **********

(NumberOfResolutions 3)

// ********* Optimizer *********

(MaximumNumberOfIterations 500)

// ********** Image Sampling **********

(NumberOfSpatialSamples 3000)
(NewSamplesEveryIteration "true")
// BB: I changed the ImageSampler from Random to RandomCoordinate because 
// otherwise the registration often (but not always...) crashed upon
// initialization because too many samples were outside the image buffer.
// (ImageSampler "Random")
(ImageSampler "RandomCoordinate")

// ********** Interpolation and Resampling 

(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)

// ********* Output format *********

(WriteResultImage "true") 
(ResultImagePixelType "short")
(ResultImageFormat "nii.gz")
