// ********* Image *********

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")
// (FixedImageDimension 3)
// (MovingImageDimension 3)

// ********* Main Components *********

(Registration "MultiResolutionRegistration")
(Interpolator "LinearInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "EulerTransform")
(Metric "AdvancedMattesMutualInformation")

// ********* Transformation *********

(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")

// ********* Similarity Measure *********

(NumberOfHistogramBins 32)
(ErodeMask "false")

// ********** Multiresolution **********

(NumberOfResolutions 1)

// ********* Optimizer *********

(MaximumNumberOfIterations 1000)

// ********** Image Sampling **********

(NumberOfSpatialSamples 5000)
(NewSamplesEveryIteration "true")
(ImageSampler "RandomCoordinate")

// ********** Interpolation and Resampling 

(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)

// ********* Output format *********

(WriteResultImage "true") 
(ResultImagePixelType "short")
(ResultImageFormat "nii.gz")
